CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:image
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:image
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
Threshold:[module_num:6|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
    Select the input image:OrigGray
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RemoveHoles:[module_num:7|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
    Select the input image:Threshold
    Name the output image:RemoveHoles
    Size of holes to fill:1.0

Watershed:[module_num:8|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
    Select the input image:RemoveHoles
    Name the output object:Watershed
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:10
    Downsample:5
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:image
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Watershed
